PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = handedness
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Routines
  Routine instruktion
    TextComponent text_1
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = Ange vilken hand du föredrar att använda för var och en av aktiviteterna nedan genom att sätta + i rätt kolumn. I de fall där du har en stark preferens för att använda den ena handen framför den andra, så till den grad att du aldrig skulle använda den andra handen om du inte absolut måste, sätt ++. I de fall där det inte spelar någon roll vilken hand du använder, sätt + ibåda kolumnerna. 
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    KeyboardComponent key_resp_1
      forceEndRoutine = True
      startVal [time (s)] = 6
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Flow
  Routine instruktion
